OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=0.0.0)
0x4c536d0a = C:/openvibe/externals/mensia/plugins/ovp-advanced-visualization/doc/scenarios/3DSourceVisualization.mxs
Comment
  File Reader
  19 channels, 250 Hz
Comment
  MENSIA TECHNOLOGIES CONFIDENTIAL
  [2012] - [2016] Mensia Technologies SA
  Copyright, All Rights Reserved.

  NOTICE: All information contained herein is, and remains
  the property of Mensia Technologies SA.
  The intellectual and technical concepts contained
  herein are proprietary to Mensia Technologies SA
  and are covered copyright law.
  Dissemination of this information or reproduction of this material
  is strictly forbidden unless prior written permission is obtained
  from Mensia Technologies SA.
Comment
  Temporal Filter
  Filter in the alpha band
Comment
  Spatial Reconstruction
  To have a signal consistent with the
  LORETA leadfield matrix defined for
  10-20 channels
Comment
  eLORETA Inverse Model
  A spatial filter estimates intra-cortical
  source activity in 2394 voxels.
Comment
  Epoch Average
  Moving average over the last 16 epochs
Comment
  3D Tomographic Visualization

  This box displays a 3D reconstruction of
  the brain activity in form of  2394 voxels

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/signal-19-channels.ov
#0.Output stream 1 -> Temporal filter "PassBand"
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 1
  Low cut frequency (Hz) = 7
  High cut frequency (Hz) = 14
  Pass band ripple (dB) = 0.500000
-> Temporal filter "Notch"
  Filter method = Butterworth
  Filter type = Band Stop
  Filter order = 3
  Low cut frequency (Hz) = 47
  High cut frequency (Hz) = 53
  Pass band ripple (dB) = 0.500000
-> 10-20 reconstruction => #3
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Output Channel List = Fp1;Fp2;F7;F3;Fz;F4;F8;T3;C3;Cz;C4;T4;T5;P3;Pz;P4;T6;O1;O2
  Spline Order = 4
  Derive Scalp Current Density = false
Matrix=#3 -> Signals
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 10
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}
#3 -> xLORETA => #5
  xLORETA algorithm = eLORETA
  Leadfield matrix = ${AdvancedSignalProcessing_LeadField19}
  Regularization parameter = 1
  Verify inverse solution = false
  Current density power averaged in Brodmann areas = false
#5.Source Current Density Power -> Epoch average
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 16
-> 3D Tomographic Visualization
  Gain = 500000
  Caption =
  Tranlucency = 0.75
  Color = 0:24,74,100; 16:12,24,74; 33:5,5,11; 34:5,5,5; 66:5,5,5; 67:11,5,5; 84:74,24,11; 100:100,74,24
