OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=0.0.0)
Comment
  File Reader
  10 (+1 ref) channels, 512 Hz, 32 samples per block
  Hand Motor Imagery session
Comment
  Reference Channel
  The reference channel is 'Nz'
Comment
  Temporal Filter
  Filter in the alpha band
Comment
  Band Power
  Average of the squared signal
  on blocks of 32 samples
Comment
  Epoch Average
  Moving average over the last 32 epochs
Comment
  Advanced Visualization:
  3D Topography

  Maps the alpha power onto a 3D model of the scalp
Comment
  This sample scenario is a part of the
  Mensia Advanced Visualization Toolset documentation.
  Mensia Technologies SA (c) 2013

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
#0.Output stream 1 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Temporal filter "8-15 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.5
-> Simple DSP "x²"
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 32
-> 3D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 1
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
