OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=0.0.0)
Comment
  File Reader
  10 (+1 ref) channels, 512 Hz, 32 samples per block
  Hand Motor Imagery session
Comment
  Bipolar
  We compute the bipolar channel C3 - C4
Comment
  Temporal Filter
  Filter in the alpha band
Comment
  Band Power
  Average of the squared signal
  on blocks of 32 samples
Comment
  Epoch Average
  Moving average over the last 32 epochs
Comment
  Advanced Visualization:
  Continuous Bars

  Displays the alpha band power level continuously
  in form of a colored vertical bar series.

  The power being a positive value, we ticked the
  corresponding box in the settings.
Comment
  This sample scenario is a part of the
  Mensia Advanced Visualization Toolset documentation.
  Mensia Technologies SA (c) 2013

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
#0.Output stream 1 -> 0xc67a01dc Reference Channel => #1
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector "C3" => #2
  Channel List = C3
  Action = Select
  Channel Matching Method = Smart
#1 -> Channel Selector "C4" => #3
  Channel List = C4
  Action = Select
  Channel Matching Method = Smart
Input - A=#2, Input - B=#3 -> Simple DSP "C3 - C4"
  Equation = A-B
-> Temporal filter "8-15 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.5
-> Simple DSP "x²"
  Equation = x*x
-> Signal average
-> Epoch average => #8
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 16
Matrix=#8 -> Continuous Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = true
  Gain = 1
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
