OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=0.0.0)
Comment
  File Reader
  10 (+1 ref) channels, 512 Hz, 32 samples per block
  Hand Motor Imagery session
Comment
  Reference Channel
  The reference channel is 'Nz'
Comment
  Temporal Filter
  Filter in the alpha band
Comment
  Band Power
  Average of the squared signal
  on blocks of 32 samples
Comment
  Epoch Average
  Moving average over the last 32 epochs
Comment
  Advanced Visualization:
  Continuous Bitmap

  Displays the alpha power of every channel
  in form of a color map.
Comment
  This sample scenario is a part of the
  Mensia Advanced Visualization Toolset documentation.
  Mensia Technologies SA (c) 2013

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 1 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Temporal filter "8-15 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.5
-> Simple DSP "x²"
  Equation = x*x
-> Signal average
-> Epoch average => #5
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 32
Matrix=#5 -> 0xc67a01dc Continuous Bitmap
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Gain = 1
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
