OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=0.0.0)
Comment
  File Reader
  10 (+1 ref) channels, 512 Hz, 32 samples per block
  Hand Motor Imagery session
Comment
  Reference Channel
  The reference channel is 'Nz'
Comment
  Temporal Filter
  Filter in the alpha band
Comment
  Advanced Visualization:
  Continuous Oscilloscope

  Displays the filtered signal
Comment
  This sample scenario is a part of the
  Mensia Advanced Visualization Toolset documentation.
  Mensia Technologies SA (c) 2013

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 1 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Temporal filter "8-15 Hz" => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.5
Matrix=#2 -> 0xc67a01dc Continuous Oscilloscope
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColor}
