OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=0.0.0)
Comment
  This sample scenario is a part of the
  Mensia Advanced Visualization Toolset documentation.
  Mensia Technologies SA (c) 2013

Time signal (512Hz) => #0
  Sampling frequency = 512
  Generated epoch sample count = 8
-> Simple DSP "k = cos(2πt x 0.05)" => #1
  Equation = cos(2*M_PI*0.05*x)
Input - A=#0, Input - B=#1 -> Simple DSP "cos(2πt + 100 x 2π(1 - cos(k)))"
  Equation = cos(2*M_PI*1*a + 2*M_PI*100*(1 - cos(b)))
-> Time based epoching (10s)
  Epoch duration (in sec) = 10
  Epoch intervals (in sec) = 0.5
-> Continuous Wavelet Analysis => #4
  Wavelet type = Morlet wavelet
  Wavelet parameter = 4
  Number of frequencies = 32
  Highest frequency = 128
  Frequency spacing = 2
Matrix=#4.Amplitude -> Instant Bitmap (3D Stream)
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 1
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
