OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=0.0.0)
Comment
  File Reader
  10 (+1 ref) channels, 512 Hz, 32 samples per block
  Hand Motor Imagery session
Comment
  Reference Channel
  The reference channel is 'Nz'
Comment
  Spatial filter
  We compute the 2 surface Laplacians
  around C3 and C4.
Comment
  Downsampling
  Temporal Filter + factor 4 decimation
  To compute our FFT up to 64 Hz.
Comment
  Epoching
  We slice the signal into 1s epochs
  every 1/16th second.
Comment
  Spectral Analysis
  Apply a FFT to the input signal.
  We only take the amplitude output
Comment
  Advanced Visualization:
  Stacked Bitmap (Horizontal)

  Displays the spectrum as a time-frequency map.
Comment
  This sample scenario is a part of the
  Mensia Advanced Visualization Toolset documentation.
  Mensia Technologies SA (c) 2013

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Fitler Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =
-> Channel Rename
  New channel names = L.C3;L.C4
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 48
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> Time based epoching
  Epoch duration (in sec) = 1.000000
  Epoch intervals (in sec) = 0.06250
-> Spectral Analysis => #8
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
Matrix=#8.Amplitude -> Stacked Bitmap (Horizontal)
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 17
  Gain = 1
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
