OpenViBE-Scenario
0x4c536d0a = C:/op/externals/mensia/plugins/ovp-advanced-visualization/doc/scenarios/UseCase-2-ERP-analysis.mxs
Comment
  ERP analysis : P300 speller

  This scenario can be used as an addition to the OpenViBE
  BCI P300-speller-xDAWN scenarios.

  Once you have aquired a P300 speller session, train the xDAWN filter
  before trying this scenario.
  You will be able to visualize the ERP (target and non-target trials) in the
  xDAWN components or directly at the electrode level.
Comment
  xDAWN pipeline
  This scenario expects a spatial filter
  computed thanks to the xDAWN BCI
  scenarios provided with openvibe.
  share/openvibe-scenarios/bci/p300-xDAWN/p300-speller-2-train-xDAWN.xml
Comment
  ERP Replay
  You can try the replay feature, in the 3D topography
  online settings (click on the toolbar to popup the menu).
Comment
  This sample scenario is a part of the
  Mensia Advanced Visualization Toolset documentation.
  Mensia Technologies SA (c) 2013

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-p300-speller.ov
#0.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #2
  Decimation factor = 4
-> 0xc67a01dc xDAWN Spatial Filter
  Spatial Fitler Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-spatial-filter.cfg
-> Time based epoching => #4
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
#2 -> Time based epoching => #5
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Sequence stimulations=#0.Output stream 3, Target stimulations=#0.Output stream 4 -> P300 Speller Visualisation
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 10,10,10
  Flash foreground color = 100,100,100
  Flash font size = 100
  No flash background color = 0,0,0
  No flash foreground color = 50,50,50
  No flash font size = 75
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 100
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 100
  Acquisition server host = localhost
  Acquisition server port = 1024
  Use trigger hardware = ${Use_Trigger_Hardware}
  Parallel port = ${Trigger_Hardware_Parallel_Port}
  Free Spelling = true
  0x8d21ff41 = ${Path_Samples}/bci-examples/p300-speller-xDAWN/p300-speller-visualisation.cfg
-> Identity "Target/Non-Target flags" => #7
Input signal=#5, Input stimulations=#7 -> Stimulation based epoching "Target Selection" => #8
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#8.Epoched signal -> Epoch average "Avg" => #9
  Averaging type = Cumulative average
  Epoch count = 4
-> 3D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 1
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Matrix=#8.Epoched signal -> Target trials
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Independant
  Time Scale = 20
  Matrix Count = 240
  Gain = 0.1
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Input signal=#5, Input stimulations=#7 -> Stimulation based epoching "Non Target Selection" => #12
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#12.Epoched signal -> Epoch average "Avg" => #13
  Averaging type = Cumulative average
  Epoch count = 4
Matrix[0]=#9, Matrix[1]=#13 -> Average target/non target
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 0.2
  Caption =
  Tranlucency = 0.75
  Color = 0,75,25
  Color = 74,25,0
Input signal=#4, Input stimulations=#7 -> Stimulation based epoching "Target Selection" => #15
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#15.Epoched signal -> Epoch average "Avg" => #16
  Averaging type = Cumulative average
  Epoch count = 4
Matrix=#15.Epoched signal -> Target trials
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Independant
  Time Scale = 20
  Matrix Count = 240
  Gain = 0.1
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Input signal=#4, Input stimulations=#7 -> Stimulation based epoching "Non Target Selection" => #18
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#18.Epoched signal -> Epoch average "Avg" => #19
  Averaging type = Cumulative average
  Epoch count = 4
Matrix[0]=#16, Matrix[1]=#19 -> Average xDAWN target/non-target
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 0.2
  Caption =
  Tranlucency = 0.75
  Color = 0,75,25
  Color = 74,25,0
