<OpenViBE-Scenario>
	<FormatVersion>1</FormatVersion>
	<Creator>OpenVIBE</Creator>
	<CreatorVersion>0.0.0</CreatorVersion>
	<Settings></Settings>
	<Inputs></Inputs>
	<Outputs></Outputs>
	<Boxes>
		<Box>
			<Identifier>(0x096cf728, 0x3b121184)</Identifier>
			<Name>Stimulation listener</Name>
			<AlgorithmClassIdentifier>(0x65731e1d, 0x47de5276)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulation stream 1</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0xa88b3667, 0x0871638c)</TypeIdentifier>
					<Name>Log level to use</Name>
					<DefaultValue>Debug</DefaultValue>
					<Value>Information</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>448</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa963f5, 0x1a638cd4)</Identifier>
					<Value>37</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>368</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xf451ad91, 0x14c75f86)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xad100179, 0xa3c984ab)</Identifier>
					<Value>119</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xfba64161, 0x65304e21)</Identifier>
					<Value></Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x3459648f, 0x3adf331e)</Identifier>
			<Name>Keyboard stimulator</Name>
			<AlgorithmClassIdentifier>(0x00d317b9, 0x6324c3ff)</AlgorithmClassIdentifier>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Outgoing Stimulations</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x330306dd, 0x74a95f98)</TypeIdentifier>
					<Name>Filename</Name>
					<DefaultValue>${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt</DefaultValue>
					<Value>${Player_ScenarioDirectory}/display-cue-image-keyboard-stimulator.txt</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>224</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa963f5, 0x1a638cd4)</Identifier>
					<Value>25</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>368</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x8d89d3b7, 0x8339d210)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xad100179, 0xa3c984ab)</Identifier>
					<Value>123</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc67a01dc, 0x28ce06c1)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>1</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x63a24d68, 0x4fb7a02b)</Identifier>
			<Name>Display cue image</Name>
			<AlgorithmClassIdentifier>(0x005789a4, 0x3ab78a36)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Display images in full screen</Name>
					<DefaultValue>false</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Clear screen Stimulation</Name>
					<DefaultValue>OVTK_StimulationId_VisualStimulationStop</DefaultValue>
					<Value>OVTK_StimulationId_Label_00</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x330306dd, 0x74a95f98)</TypeIdentifier>
					<Name>Cue Image 1</Name>
					<DefaultValue>${Path_Data}/share/openvibe/scenarios/box-tutorials/openvibe-logo.png</DefaultValue>
					<Value>${Player_ScenarioDirectory}/openvibe-logo.png</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Stimulation 1</Name>
					<DefaultValue>OVTK_StimulationId_Label_01</DefaultValue>
					<Value>OVTK_StimulationId_Label_01</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>336</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa963f5, 0x1a638cd4)</Identifier>
					<Value>37</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>368</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x295db2ab, 0xb8a60cd8)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x61d11811, 0x71e65362)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xad100179, 0xa3c984ab)</Identifier>
					<Value>109</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>4</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
			</Attributes>
		</Box>
	</Boxes>
	<Links>
		<Link>
			<Identifier>(0x481b1739, 0x19e2bfcd)</Identifier>
			<Source>
				<BoxIdentifier>(0x63a24d68, 0x4fb7a02b)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x096cf728, 0x3b121184)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
			<Attributes>
				<Attribute>
					<Identifier>(0x1b32c44c, 0x1905e0e9)</Identifier>
					<Value>361</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x358ae8b5, 0x0f8bacd1)</Identifier>
					<Value>368</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x3f0a3b27, 0x570913d2)</Identifier>
					<Value>425</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x6267b5c5, 0x676e3e42)</Identifier>
					<Value>368</Value>
				</Attribute>
			</Attributes>
		</Link>
		<Link>
			<Identifier>(0x4d08a9e4, 0x6af2bb3b)</Identifier>
			<Source>
				<BoxIdentifier>(0x3459648f, 0x3adf331e)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x63a24d68, 0x4fb7a02b)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
			<Attributes>
				<Attribute>
					<Identifier>(0x1b32c44c, 0x1905e0e9)</Identifier>
					<Value>243</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x358ae8b5, 0x0f8bacd1)</Identifier>
					<Value>368</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x3f0a3b27, 0x570913d2)</Identifier>
					<Value>313</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x6267b5c5, 0x676e3e42)</Identifier>
					<Value>368</Value>
				</Attribute>
			</Attributes>
		</Link>
	</Links>
	<Comments>
		<Comment>
			<Identifier>(0x00005e54, 0x00006613)</Identifier>
			<Text>The &lt;i&gt;Stimulation Listener&lt;/i&gt; will print the
received triggers into the console.</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>560</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>448</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x00006f1d, 0x000040cf)</Identifier>
			<Text>The &lt;b&gt;&lt;i&gt;Display Cue Image&lt;/i&gt;&lt;/b&gt; box will
display an image upon receiving a trigger and will
hide it when another trigger arrives.

On its output it will send triggers marking the actual
moments when the image was displayed/hidden.</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>592</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>336</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x391fe906, 0x40347345)</Identifier>
			<Text>Then the &lt;i&gt;Keyboard Stimulator&lt;/i&gt; box
is used to generate triggers that we will use
to know when to display an image.</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>576</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>224</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x4cb4d0c5, 0x61c7bb28)</Identifier>
			<Text>You can browse each box' documentation by selecting the box and pressing &lt;b&gt;F1&lt;/b&gt;</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>544</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>512</Value>
				</Attribute>
			</Attributes>
		</Comment>
	</Comments>
	<Metadata>
		<Entry>
			<Identifier>(0x00003f0b, 0x00003088)</Identifier>
			<Type>(0x3bcce5d2, 0x43f2d968)</Type>
			<Data>[{&quot;boxIdentifier&quot;:&quot;(0x63a24d68, 0x4fb7a02b)&quot;,&quot;childCount&quot;:0,&quot;dividerPosition&quot;:-842150451,&quot;height&quot;:-842150451,&quot;identifier&quot;:&quot;(0x00004e08, 0x00007a62)&quot;,&quot;maxDividerPosition&quot;:-842150451,&quot;parentIdentifier&quot;:&quot;(0xffffffff, 0xffffffff)&quot;,&quot;type&quot;:3,&quot;width&quot;:-842150451},{&quot;boxIdentifier&quot;:&quot;(0x3459648f, 0x3adf331e)&quot;,&quot;childCount&quot;:0,&quot;dividerPosition&quot;:-842150451,&quot;height&quot;:-842150451,&quot;identifier&quot;:&quot;(0x00006479, 0x00004326)&quot;,&quot;maxDividerPosition&quot;:-842150451,&quot;parentIdentifier&quot;:&quot;(0xffffffff, 0xffffffff)&quot;,&quot;type&quot;:3,&quot;width&quot;:-842150451}]</Data>
		</Entry>
	</Metadata>
	<Attributes>
		<Attribute>
			<Identifier>(0x4c536d0a, 0xb23dc545)</Identifier>
			<Value>${Player_ScenarioDirectory}/display-cue-image.mxs</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0x4c90d4ad, 0x7a2554ec)</Identifier>
			<Value>320</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0x7b814cca, 0x271df6dd)</Identifier>
			<Value>480</Value>
		</Attribute>
	</Attributes>
</OpenViBE-Scenario>